PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = semantic-decision
  keyboardBackend = ioHub
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Routines
  Routine practice_trials_instructions
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    TextComponent practice_instructions_text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $open(f'resources/{category}/instructions/instructions1.txt', encoding='utf-8').read()
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    KeyboardComponent key_resp_practice_instructions_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_trials_instructions_2
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    TextComponent practice_instructions_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $open(f'resources/{category}/instructions/instructions2.txt', encoding='utf-8').read()
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    KeyboardComponent key_resp_practice_instructions_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fx_cross_practice
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    TextComponent fx_cross_1
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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  Routine stim_practice
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    KeyboardComponent key_resp_practice_stim
      allowedKeys = 'j','k'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      storeCorrect = True
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    ImageComponent practice_image
      image [set every repeat] = $file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        feedback_text = 'CORRECTO' if correct == key_resp_practice_stim.keys else 'INCORRECTO'
    TextComponent feedback_text_comp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_text
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  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora comenzará la tarea. Respondé lo más rápido que puedas sin cometer errores.

        Presioná ESPACIO para continuar.
    KeyboardComponent key_resp_instructiones
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fx_cross_routine
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    TextComponent fx_cross_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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  Routine stim
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    KeyboardComponent key_resp
      allowedKeys = 'j','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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    ImageComponent image
      image [set every repeat] = $file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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  Routine acknowledgment
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    TextComponent text_ending
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!

        Pulse ESPACIO para finalizar
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_trials_instructions_3
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    TextComponent practice_instructions_text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora vamos a hacer algunos ensayos de práctica. Respondé lo más rápido que puedas sin cometer errores.

        Presioná ESPACIO para continuar.
    KeyboardComponent key_resp_practice_instructions_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = resources/trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'category': 'objects'},
      {'category': 'actions'}]
    Routine practice_trials_instructions
    Routine practice_trials_instructions_2
    Routine practice_trials_instructions_3
    LoopInitiator trials_practice loopType="TrialHandler"
      conditionsFile = $ f'resources/{category}/stimuli/practice.xlsx'
      loopType = random
      nReps = 1
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      conditions:
        [{'task': 'practice (4)', 'condition': 'plausible', 'word': 'cat', 'Spainish': 'gato', 'POS': 'N', 'file': 'resources/pictures/cat.jpg', 'correct': 'j'},
        {'task': None, 'condition': 'plausible', 'word': 'cherry', 'Spainish': 'cereza', 'POS': 'N', 'file': 'resources/pictures/cherry.jpg', 'correct': 'j'},
        {'task': None, 'condition': 'plausible', 'word': 'bathing', 'Spainish': 'bañándose', 'POS': 'V', 'file': 'resources/pictures/bathing.png', 'correct': 'j'},
        {'task': None, 'condition': 'plausible', 'word': 'buttoning', 'Spainish': 'abotonándose', 'POS': 'V', 'file': 'resources/pictures/buttoning.png', 'correct': 'j'},
        {'task': None, 'condition': 'implaus', 'word': 'x24', 'Spainish': 'na', 'POS': 'V', 'file': 'resources/pictures/levitatingGirl.png', 'correct': 'k'},
        {'task': None, 'condition': 'implaus', 'word': 'x25', 'Spainish': 'na', 'POS': 'V', 'file': 'resources/pictures/swimGrass.png', 'correct': 'k'},
        {'task': None, 'condition': None, 'word': None, 'Spainish': None, 'POS': None, 'file': None, 'correct': None},
        {'task': None, 'condition': None, 'word': None, 'Spainish': None, 'POS': None, 'file': None, 'correct': None}]
      Routine fx_cross_practice
      Routine stim_practice
      Routine feedback
    LoopTerminator trials_practice
    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $f'resources/{category}/stimuli/stimuli.xlsx'
      loopType = random
      nReps = 1
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      conditions:
        [{'task': 'abstract_concrete', 'Word': 'enigma', 'englishWord': 'enigma', 'POS': 'N', 'LEN': 6, 'CON_M': 2.95, 'FAM_M': 4.23809523809524, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
        {'task': None, 'Word': 'quimera', 'englishWord': 'chimera', 'POS': 'N', 'LEN': 7, 'CON_M': 2.95238095238095, 'FAM_M': 3.35, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
        {'task': None, 'Word': 'inflación', 'englishWord': 'inflation', 'POS': 'N', 'LEN': 9, 'CON_M': 3.2, 'FAM_M': 3.4, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
        {'task': None, 'Word': 'heroísmo', 'englishWord': 'heroism', 'POS': 'N', 'LEN': 8, 'CON_M': 3.04545454545455, 'FAM_M': 3.45454545454545, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
        {'task': None, 'Word': 'severidad', 'englishWord': 'severity', 'POS': 'N', 'LEN': 9, 'CON_M': 3.36363636363636, 'FAM_M': 3.66666666666667, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
        {'task': None, 'Word': 'idealismo', 'englishWord': 'idealism', 'POS': 'N', 'LEN': 9, 'CON_M': 2.80952380952381, 'FAM_M': 3.71428571428571, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'},
        {'task': None, 'Word': 'divinidad', 'englishWord': 'divinity', 'POS': 'N', 'LEN': 9, 'CON_M': 1.85, 'FAM_M': 3.75, 'Freq_condition': 'low_freq', 'Conc_condition': 'abstract'}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
      Routine fx_cross_routine
      Routine stim
    LoopTerminator trials
  LoopTerminator trials_2
  Routine acknowledgment
